% excitatory synaptic current is a composite signal of AMPA and NMDA activation
% the synapse expresses STDP
% the STDP change initialy impacts W but extends its influence on P

% AMPA synaptic parameters
gAmpa = 0.1       % mS/cm2, maximal conductance
EAMPA = [0]         % mV, reversal potential
tauAMPAr = [0.2]   
tauAMPAd = [4]
IC = 0.01
IC_noise = [0]

% NMDA Synaptic parameters and auxiliary functions (see Methods in Neuronal Modeling, Chapter 1)
gNmda = [.1]        % mS/cm2, maximal conductance
ENMDA = [0]         % mV, reversal potential
tauNMDAd = 125 
tauNMDAr = 3.76 
Tmax = 1            % mM, maximal transmitter concentration
Vpp = [2]           % mV
Kp = [5] 
NT(X) = Tmax./(1+exp(-(X-Vpp)/Kp)) 		 % sigmoidal neurotransmitter concentration [T] increasing rapidly to Tmax with presynaptic voltage above 0mV (i.e., Vpre spike)
MgBlock(X) = 1./(1+0.33*exp(-0.06*X))  % .33 sigmoidal Magnesium block for NMDA synapse

% Network Connectivity
N_syn=1
netcon=ones(N_pre, N_post) % default connectivity matrix is all-to-all

% Presynaptic spike detection (this is for Hodgkin-Huxley neurons)
sAMPA' = -sAMPA./tauAMPAd + 1/2*(1+tanh(X_pre/10)).*((1-sAMPA)/tauAMPAr)
sAMPA(0) = IC+IC_noise.*rand(1,N_pre)
sNMDA' = NT(X_pre).*(1-sNMDA)/tauNMDAr-sNMDA/tauNMDAd 	% first-order kinetics for two-state (open/closed) scheme. [s]=fraction of receptors in open state
sNMDA(0) = IC+IC_noise.*rand(1,N_pre)

% Synaptic conductance and currents
g_ampa(sAMPA) = gAmpa.*sAMPA
g_nmda(sNMDA) = gNmda.*sNMDA

IAMPA(X,w,sAMPA) = g_ampa(sAMPA)*(w.*netcon).*(X-EAMPA)
INMDA(X,sNMDA)   = g_nmda(sNMDA)*(w_nmda.*netcon).*(X-ENMDA).*MgBlock(X)

% STDP
taux=5
tauy=5
wmax=5
IC_w=1
w_nmda=IC_w
rx=0.5 % LTP step
ry=0.5 % LTD step
alpha=20 % memory amplitude modulation
delay_pre=0
delay_post=0

heavyside_theta = @(x) double(x>0)

ax(x)=((1-x) + x/taux).*alpha % incremental increase in presynaptic trace with nearest-neighbor spike-interaction
ay(y)=((1-y) + y/tauy).*alpha % incremental increase in postsynaptic trace
Ax(w)=heavyside_theta(wmax-w).*rx % hard bounds
Ay(w)=w*ry      % soft bounds
detection_interval = 1.5*dt
dx/dt=-x./taux+ax(x).*sum((t-tspike_pre-delay_pre)<detection_interval)
dy/dt=-y./tauy+ay(y).*sum((t-tspike_post-delay_post)<detection_interval)

% this is the template from here: http://www.scholarpedia.org/article/Spike-timing_dependent_plasticity
%dw/dt=Ax(w).*x.*sum((t-tspike_post-delay_post)<detection_interval) - Ay(w).*y.*sum((t-tspike_pre-delay_pre)<detection_interval)
%x(0)=.1; y(0)=.1; w(0)=IC_w+IC_noise.*rand(N_pre,N_post)

dw/dt=Ax(w).*repmat(x,[N_post,1])'.*repmat(sum((t-tspike_post-delay_post)<detection_interval),[N_pre, 1]) - Ay(w).*repmat(y,[N_pre, 1]).*repmat(sum((t-tspike_pre-delay_pre)<detection_interval),[N_post,1])'
x(0)=zeros(1,N_pre); 
y(0)=zeros(1,N_post); 
w(0)=IC_w.*ones(N_pre,N_post)

monitor IAMPA, INMDA % functions
@current += -IAMPA(X_post,w,sAMPA)-INMDA(X_post,sNMDA)