% iHChing2010TC: Hyperpolarization-activated H-current, Hodgkin-Huxley-style,
%   for generic thalamocortical relay cells
% Reference: "Ching, S., Cimenser, A., Purdon, P. L., Brown, E. N., & Kopell, N.
%   J. (2010). Thalamocortical model for a propofol-induced alpha-rhythm
%   associated with loss of consciousness. Proceedings of the National Academy of
%   Sciences, 107(52), 22665-22670. doi:10.1073/pnas.1017069108"
% Requires: calcium concentration "@CaBuffer" (exposed by "CaBufferChing2010TC" mechanism)
% Tags: calcium, current, intrinsic, thalamus
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
gH = 0.005 % mS/cm^2
EH = -43   % mV

% Functions
tauS(X) = 20 + 1000./(exp((X+71.5)./14.2)+exp((-(X+89))./11.6))
Hinf(X) = 1./(1+exp((X+75)./5.5))
aH(X) = Hinf(X)./tauS(X)
bH(X) = (1-Hinf(X))./tauS(X)
IHChing2010TC(X,Cone,Pzero,OPENone) = gH.*(OPENone+2.*(1-Cone-OPENone)).*(X-EH)

% Record all the things!
% let's hope I can get the internal current amount some other way
% monitor functions

% ODEs and ICs
Cone' = bH(X).*OPENone - aH(X).*Cone;
Cone(0) = zeros(1,Npop)
%0.5.*rand(1,Npop);

% Note: here, it uses the external @CaBuffer
Pzero' = 0.0004.*(1-Pzero) - 0.0004.*((@CaBuffer./0.002).^4).*Pzero;
Pzero(0) = zeros(1,Npop)
%0.5.*rand(1,Npop);

% AES: change this
OPENone' = 0.001.*(1-Cone-OPENone) - 0.001.*((1-Pzero)./0.01).*OPENone;
OPENone(0) = zeros(1,Npop);

% Linker
@current += -IHChing2010TC(X,Cone,Pzero,OPENone)
