% excitatory synaptic current can be a composite signal of AMPA and NMDA activation but I use AMPA only for now
% the synapse expresses STDP

% AMPA synaptic parameters
gAmpa = 0.1       % mS/cm2, maximal conductance
EAMPA = [0]         % mV, reversal potential
tauAMPAr = [0.2]   
tauAMPAd = [4]
IC = 0.01
IC_noise = [0]

% Network Connectivity
netcon=ones(N_pre, N_post) % default connectivity matrix is all-to-all

% Presynaptic spike detection
sAMPA1' = -sAMPA1./tauAMPAd + 1/2*(1+tanh(X_pre/10)).*((1-sAMPA1)/tauAMPAr)
sAMPA1(0) = IC+IC_noise.*rand(1,N_pre)

xSyn1(0)=zeros(1,N_pre); 
wSyn1(0)=ones(N_pre,N_post)

delaySyn1_pre=0
delay_post=0

% STDP
taux_d=4    % pre memory
taux_r=0.1  % pre memory
tauy_d=4    % post memory
tauy_r=0.1  % post memory
wmax=2.4
rx=0.15/dt   % 10% per dt; LTP step
ry=0.1/dt  % LTD step

% Compute normalization factor for alpha
ratio_x = taux_r / taux_d;
exponent1x = taux_r / (taux_d - taux_r);
exponent2x = taux_d / (taux_d - taux_r);
peak_unscaled_x = ratio_x^exponent1x - ratio_x^exponent2x;
alpha_x = (taux_d - taux_r) / peak_unscaled_x * (taux_r + taux_d) / (taux_r * taux_d); % memory amplitude modulation, so that the memory trace is between 0 and 1

ratio_y = tauy_r / tauy_d;
exponent1y = tauy_r / (tauy_d - tauy_r);
exponent2y = tauy_d / (tauy_d - tauy_r);
peak_unscaled_y = ratio_y^exponent1y - ratio_y^exponent2y;
alpha_y = (tauy_d - tauy_r) / peak_unscaled_y * (tauy_r + tauy_d) / (tauy_r * tauy_d); % memory amplitude modulation, so that the memory trace is between 0 and 1

ratio = tauAMPAr / tauAMPAd;
exponent1 = tauAMPAr / (tauAMPAd - tauAMPAr);
exponent2 = tauAMPAd / (tauAMPAd - tauAMPAr);
peak_unscaled = ratio^exponent1 - ratio^exponent2;
alpha = (tauAMPAd - tauAMPAr) / peak_unscaled * (tauAMPAr + tauAMPAd) / (tauAMPAr * tauAMPAd); % memory amplitude modulation, so that the memory trace is between 0 and 1

% Shared functions
heavyside_theta = @(x) double(x>0)
g_ampa(sAMPA) = gAmpa.*(sAMPA)

Ax(w)=heavyside_theta(wmax-w).*rx % hard bounds
Ay(w)=w*ry      % soft bounds
detection_interval = 10*dt

% Postsynaptic trace
dy/dt = -(1/tauy_r + 1/tauy_d) * y + alpha_y/(tauy_d - tauy_r) * sum( (t - tspike_post - delay_post > 0) .* ( exp(-(t - tspike_post - delay_post)/tauy_d) - exp(-(t - tspike_post - delay_post)/tauy_r) ) );

% Independent functions for all synaptic dimensions
% (1) Main layer
    % Presynaptic memory trace
dxSyn1/dt = -(1/taux_r + 1/taux_d) * xSyn1 + alpha_x/(taux_d - taux_r) * sum( (t - tspike_pre - delaySyn1_pre > 0) .* ( exp(-(t - tspike_pre - delaySyn1_pre)/taux_d) - exp(-(t - tspike_pre - delaySyn1_pre)/taux_r) ) );

    % Weight change
dwSyn1/dt=Ax(wSyn1).*repmat(xSyn1,[N_post,1])'.*repmat(sum((t-tspike_post-delay_post)<detection_interval),[N_pre, 1]) + Ay(wSyn1).*repmat(y,[N_pre, 1]).*repmat(sum((t-tspike_pre-delaySyn1_pre)<detection_interval),[N_post,1])'
    
    % Postsynaptic current
IAMPAsyn1(X,wSyn1,sAMPA1) = g_ampa(sAMPA1)*(wSyn1.*netcon).*(X-EAMPA).*temp_switch

% Activate the synapse after the neurons settle (100ms)
temp_switch = 0
settling_time = 0 % ms
if(t<settling_time)(temp_switch = 0)
if(t>=settling_time)(temp_switch = 1)

monitor IAMPAsyn1
@current += -IAMPAsyn1(X_post,wSyn1,sAMPA1)